PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  color = $[-1,-1,-1]
  expName = SC_experiment
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Routines
  Routine SC_task
    TextComponent text_SC_task
      letterHeight = 0.16
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $SC_Stimuli
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  Routine instruction
    TextComponent text_Instruction
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Im Folgenden sehen Sie verschiedene Sätze, bei denen jeweils das letzte Wort fehlt. Bitte ergänzen Sie still das fehlende Wort. Teilweise sehen Sie auch Sätze, die keinen Sinn ergeben. Hier müssen Sie keine Wörter ergänzen. Warten Sie in diesen Fällen einfach ab, bis der nächste sinnvolle Satz erscheint.
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    KeyboardComponent key_resp_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_end
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Ende der Aufgabe
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Flow
  Routine instruction
  LoopInitiator trials_stimuli loopType="TrialHandler"
    conditionsFile = SC_list1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SC_Stimuli', 'Astronauten fliegen mit Raketen ins _____.')]),
      OrderedDict([('SC_Stimuli', 'Nehmen Sie das Baby auf den _____.')]),
      OrderedDict([('SC_Stimuli', 'Sie kaufte Gemüse und frisches _____.')]),
      OrderedDict([('SC_Stimuli', 'Suppe isst man mit einem _____.')]),
      OrderedDict([('SC_Stimuli', 'Xbg rhc hgxgr Jknrhc sp _____.')]),
      OrderedDict([('SC_Stimuli', 'Xbg rkc vhrmgr mbgn sx mhp _____.')]),
      OrderedDict([('SC_Stimuli', 'Bg mrkxg h nkxg kn h nsgzg gk _____.')]),
      OrderedDict([('SC_Stimuli', 'Pbg mgnx xk Rspngc Mkrlr hnr phm Jszmgc _____.')]),
      OrderedDict([('SC_Stimuli', 'Sie gab ihm einen innigen _____.')]),
      OrderedDict([('SC_Stimuli', 'Wale und Delfine leben im _____.')]),
      OrderedDict([('SC_Stimuli', 'Wenn die Lichter ausgehen, ist es _____.')]),
      OrderedDict([('SC_Stimuli', 'Zur Entscheidung werfen wir eine _____.')]),
      OrderedDict([('SC_Stimuli', 'Lsknp bhtg tgrc pbhrn _____.')]),
      OrderedDict([('SC_Stimuli', 'Bg hxg h nghnqx vqxxgr hnr wgllc _____.')]),
      OrderedDict([('SC_Stimuli', 'Mg qpqhllc ghx msxb gkrmp hnr _____.')]),
      OrderedDict([('SC_Stimuli', 'Mbgn Sk xbsrpxc S mhnx pkjgxbsnc xk _____.')]),
      OrderedDict([('SC_Stimuli', 'Vom rostigen Auto blätterte der _____.')]),
      OrderedDict([('SC_Stimuli', 'Ein Dreieck hat drei  _____.')]),
      OrderedDict([('SC_Stimuli', 'Beim Sturm brach am Segelboot der _____.')]),
      OrderedDict([('SC_Stimuli', 'Die Arbeiter rodeten den _____.')]),
      OrderedDict([('SC_Stimuli', 'S mggn jc jkngc sn h _____.')])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
    Routine SC_task
  LoopTerminator trials_stimuli
  Routine end
