PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001', 'triggers': 'yes'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 960]
  color = black
  expName = BreathHold
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Routines
  Routine trial
    TextComponent breathe
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 38
      text = Normal Atmen
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    TextComponent get_ready
      letterHeight = 0.1
      startVal [time (s)] = 38
      stopVal [duration (s)] = 2
      text = Bereitmachen
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    TextComponent inspire
      letterHeight = 0.1
      startVal [time (s)] = 40
      stopVal [duration (s)] = 4
      text = Einatmen
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    TextComponent hold_breath
      letterHeight = 0.1
      startVal [time (s)] = 44
      stopVal [duration (s)] = 16
      text = Atem anhalten
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        self.first = True
      Begin Routine:
        if self.first:
            if expInfo['triggers'] == 'yes':
                setupTriggers(self, MODE_EXP)
            else:
                setupTriggers(self, MODE_DEV)

            startTriggers(self)

            self.message = message
            self.endExpNow = endExpNow
            self.defaultKeyboard = defaultKeyboard
            self.win = win
            self.first = False
            waitForFMRITrigger(self, "+")
      Each Frame:
        if checkForFMRITrigger(self):
            logging.log(level = logging.EXP, msg = 'fMRI trigger')
    TextComponent message
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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      text:
        Any text

        including line breaks
  Routine end_breathe
    TextComponent breathe1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Normal atmen
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  Routine instr
    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Sie haben es fast geschafft!
        In der letzten Aufgabe werden Sie gebeten abwechselnd normal zu atmen, einzuatmen und den Atem anzuhalten. Bitte versuchen Sie sich möglichst genau an die Anweisungen auf dem Bildschirm zu halten.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        sys.path.append("../Utils/")
        from Triggers import (setupTriggers, closeTriggers, waitForFMRITrigger, checkForFMRITrigger, startTriggers, MODE_EXP, MODE_DEV)

        self = lambda:0
      Begin Routine:
        if expInfo['triggers'] == 'yes':
            setupTriggers(self, MODE_EXP)
        else:
            setupTriggers(self, MODE_DEV)
  Routine end
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Geschafft! :)
        Danke für Ihre Teilnahme!
    CodeComponent code_2
      Code Type = Py
      End Experiment:
        closeTriggers(self)
Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine trial
  LoopTerminator trials
  Routine end_breathe
  Routine end
