PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = black
  expName = fluency
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Routines
  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press space key to start
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    ImageComponent image
      image [set every repeat] = $stimImage
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine end
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Finished!
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.xlsx
    loopType = sequential
    nReps = 24
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    conditions:
      [OrderedDict([('stimImage', 'Folie1.JPG')]),
      OrderedDict([('stimImage', 'Folie2.JPG')]),
      OrderedDict([('stimImage', 'Folie3.JPG')]),
      OrderedDict([('stimImage', 'Folie4.JPG')]),
      OrderedDict([('stimImage', 'Folie5.JPG')]),
      OrderedDict([('stimImage', 'Folie6.JPG')]),
      OrderedDict([('stimImage', 'Folie7.JPG')]),
      OrderedDict([('stimImage', 'Folie8.JPG')]),
      OrderedDict([('stimImage', 'Folie9.JPG')]),
      OrderedDict([('stimImage', 'Folie10.JPG')]),
      OrderedDict([('stimImage', 'Folie11.JPG')]),
      OrderedDict([('stimImage', 'Folie12.JPG')]),
      OrderedDict([('stimImage', 'Folie13.JPG')]),
      OrderedDict([('stimImage', 'Folie14.JPG')]),
      OrderedDict([('stimImage', 'Folie15.JPG')]),
      OrderedDict([('stimImage', 'Folie16.JPG')]),
      OrderedDict([('stimImage', 'Folie17.JPG')]),
      OrderedDict([('stimImage', 'Folie18.JPG')]),
      OrderedDict([('stimImage', 'Folie19.JPG')]),
      OrderedDict([('stimImage', 'Folie20.JPG')]),
      OrderedDict([('stimImage', 'Folie21.JPG')]),
      OrderedDict([('stimImage', 'Folie22.JPG')]),
      OrderedDict([('stimImage', 'Folie23.JPG')]),
      OrderedDict([('stimImage', 'Folie24.JPG')])]
    Routine trial
  LoopTerminator trials
  Routine end
