PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001', 'Send triggers': 'yes'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 960]
  color = black
  expName = fluency
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Routines
  Routine instructions
    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Sie sehen gleich einzelne Buchstaben. Überlegen Sie sich möglichst viele Wörter, die mit dem angezeigten Buchstaben beginnen. Wenn Sie ein Symbol sehen, das nicht im deutschen Alphabet vorkommt, warten Sie einfach auf den nächsten sinnvollen Buchstaben.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        sys.path.append("../Utils/")
        from Triggers import (setupTriggers, closeTriggers, waitForFMRITrigger, checkForFMRITrigger, startTriggers, MODE_EXP, MODE_DEV)

        self = lambda:0
  Routine trial
    TextComponent text_3
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $letter
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        self.first = True
      Begin Routine:
        if self.first:
            if expInfo['Send triggers'] == 'yes':
                setupTriggers(self, MODE_EXP)
            else:
                setupTriggers(self, MODE_DEV)

            startTriggers(self)

            self.message = message
            self.endExpNow = endExpNow
            self.defaultKeyboard = defaultKeyboard
            self.win = win

            print("Waiting")
            self.first = False
            waitForFMRITrigger(self, "+")
      Each Frame:
        if checkForFMRITrigger(self):
            logging.log(level = logging.EXP, msg = 'fMRI trigger')
    TextComponent message
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine end
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Ende der Aufgabe
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    CodeComponent code_2
      Code Type = Py
      End Experiment:
        closeTriggers(self)
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = fluency_list1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('letter', 'ծ')]),
      OrderedDict([('letter', 'ճ')]),
      OrderedDict([('letter', 'M')]),
      OrderedDict([('letter', 'W')]),
      OrderedDict([('letter', 'ꬸ')]),
      OrderedDict([('letter', 'Ꞇ')]),
      OrderedDict([('letter', 'U')]),
      OrderedDict([('letter', 'J')]),
      OrderedDict([('letter', 'ꭊ')]),
      OrderedDict([('letter', 'Ꝿ')]),
      OrderedDict([('letter', 'B')]),
      OrderedDict([('letter', 'E')]),
      OrderedDict([('letter', 'ջ')]),
      OrderedDict([('letter', '֏')]),
      OrderedDict([('letter', 'R')]),
      OrderedDict([('letter', 'V')]),
      OrderedDict([('letter', 'թ')]),
      OrderedDict([('letter', 'ꭅ')]),
      OrderedDict([('letter', 'A')]),
      OrderedDict([('letter', 'F')]),
      OrderedDict([('letter', 'თ')]),
      OrderedDict([('letter', 'שׂ')]),
      OrderedDict([('letter', 'S')]),
      OrderedDict([('letter', 'L')])]
    Routine trial
  LoopTerminator trials
  Routine end
