PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = black
  expName = fluency
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Routines
  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press space key to start
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $letter
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  Routine end
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Finished!
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.xlsx
    loopType = sequential
    nReps = 24
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    conditions:
      [OrderedDict([('letter', 'ծ')]),
      OrderedDict([('letter', 'ճ')]),
      OrderedDict([('letter', 'D')]),
      OrderedDict([('letter', 'A')]),
      OrderedDict([('letter', '\u1cb0')]),
      OrderedDict([('letter', '\u1ca4')]),
      OrderedDict([('letter', 'V')]),
      OrderedDict([('letter', 'E')]),
      OrderedDict([('letter', '\u1caa')]),
      OrderedDict([('letter', 'ᴌ')]),
      OrderedDict([('letter', 'M')]),
      OrderedDict([('letter', 'I')]),
      OrderedDict([('letter', 'ջ')]),
      OrderedDict([('letter', '֏')]),
      OrderedDict([('letter', 'K')]),
      OrderedDict([('letter', 'U')]),
      OrderedDict([('letter', 'թ')]),
      OrderedDict([('letter', 'წ')]),
      OrderedDict([('letter', 'L')]),
      OrderedDict([('letter', 'S')]),
      OrderedDict([('letter', 'თ')]),
      OrderedDict([('letter', 'ჯ')]),
      OrderedDict([('letter', 'T')]),
      OrderedDict([('letter', 'P')])]
    Routine trial
  LoopTerminator trials
  Routine end
