PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001', 'triggers': 'yes'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 960]
  color = $[-1.000,-1.000,-1.000]
  expName = RestingState
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp
      allowedKeys = 'escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        sys.path.append("../Utils/")
        from Triggers import (setupTriggers, closeTriggers, waitForFMRITrigger, checkForFMRITrigger, startTriggers, MODE_EXP, MODE_DEV)

        self = lambda:0
      Begin Routine:
        if expInfo['triggers'] == 'yes':
            setupTriggers(self, MODE_EXP)
        else:
            setupTriggers(self, MODE_DEV)

        startTriggers(self)
    CodeComponent code_2
      Code Type = Py
      End Experiment:
        closeTriggers(self)
    CodeComponent code_3
      Code Type = Py
      Each Frame:
        if checkForFMRITrigger(self):
            logging.log(level = logging.EXP, msg = 'fMRI trigger')
Flow
  Routine trial
