PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  expName = SC_experiment
  Screen = 1
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Routines
  Routine SC_task
    TextComponent text_SC_task
      text [set every repeat] = $SC_Stimuli
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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  Routine instruction
    TextComponent text_Instruction
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Satzergänzungsaufgabe:

        Im Folgenden sehen Sie verschiedene Sätze, bei denen jeweils das letzte Wort fehlt. Bitte ergänzen Sie IM STILLEN das fehlende Wort. Denken Sie anschließend über weitere Ergänzungsmöglichkeiten nach, bis der nächste Satz auf dem Bildschirm erscheint.

        Teilweise sehen Sie auch Nonsense-Sätze, die aus bloßen Aneinanderreihungen von Buchstaben bestehen und keinen Sinn ergeben. Hier müssen Sie keine Wörter ergänzen. Warten Sie in diesen Fällen einfach ab, bis der nächste sinnvolle Satz erscheint.

        Drücken Sie eine beliebige Taste, sobald Sie bereit sind, um die Aufgabe zu starten.
    KeyboardComponent key_resp_start
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_end
      text = Geschafft!
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instruction
  LoopInitiator trials_stimuli loopType="TrialHandler"
    conditionsFile = SC_Stimuli.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'SC_Stimuli': u'Das Gegenteil von drinnen ist _____.'},
      {u'SC_Stimuli': u'Wenn die Lichter ausgehen, ist es _____.'},
      {u'SC_Stimuli': u'Suppe isst man mit einem _____.'},
      {u'SC_Stimuli': u'Ein Dreieck hat drei _____.'},
      {u'SC_Stimuli': u'Xbg rhc hgxgr Jknrhc sp _____.'},
      {u'SC_Stimuli': u'Xbg rkc vhrmgr mbgn sx mhp _____.'},
      {u'SC_Stimuli': u'Bg mrkxg h nkxg kn h nsgzg kg _____.'},
      {u'SC_Stimuli': u'Pbg mgnx xk RspngcMkrlr hnr phm Jszmgc _____.'},
      {u'SC_Stimuli': u'Wale und Delfine leben im _____.'},
      {u'SC_Stimuli': u'Bevor sie zu Bett ging, putzte sie ihre _____.'},
      {u'SC_Stimuli': u'Er schrieb die Notiz auf ein St\xfcck _____.'},
      {u'SC_Stimuli': u'Am Strand gibt es sehr viel _____.'},
      {u'SC_Stimuli': u'Lsknp bhtg tgrc pbhrn _____.'},
      {u'SC_Stimuli': u'Bg hxg h nghnqx vqxxgr hnr wgllc _____.'},
      {u'SC_Stimuli': u'Mg qpqhllc ghx msxb gkrmp hnr _____.'},
      {u'SC_Stimuli': u'Mbgn Sk xbsrpxc S mhnx pkjgxbsnc xk _____.'},
      {u'SC_Stimuli': u'Um lila zu erhalten, mischt man rot und _____.'},
      {u'SC_Stimuli': u'Der L\xf6we sch\xfcttelt seine pr\xe4chtige _____.'},
      {u'SC_Stimuli': u'Nehmen Sie das Baby auf den _____.'},
      {u'SC_Stimuli': u'Sie gab ihm einen innigen _____.'},
      {u'SC_Stimuli': u'S mggn jc jkngc sn h _____.'},
      {u'SC_Stimuli': u'Kn xbg vghzb xbgrg sp h lkx kg _____.'},
      {u'SC_Stimuli': u'Zrcsnc vhvsgp jhmg h lkx kg _____.'},
      {u'SC_Stimuli': u'Lgjknp hrg pkqr, vqx pqchr sp _____.'},
      {u'SC_Stimuli': u'Der Bauer geht zum K\xfchemelken in den _____.'},
      {u'SC_Stimuli': u'Zur Entscheidung werfen wir eine _____.'}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
    Routine SC_task
  LoopTerminator trials_stimuli
  Routine end
