PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = black
  expName = fluency
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Routines
  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press space key to start
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    TextComponent text_3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $sentence
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  Routine end
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Finished!
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.xlsx
    loopType = sequential
    nReps = 24
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    conditions:
      [OrderedDict([('sentence', 'Lions have very sharp _____.')]),
      OrderedDict([('sentence', 'Soup should be eaten with a _____.')]),
      OrderedDict([('sentence', 'Whales and dolphins live in the ______.')]),
      OrderedDict([('sentence', 'Crying babies make a lot of _____.')])]
    Routine trial
  LoopTerminator trials
  Routine end
